CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load one image from the full set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:OrigDAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:OrigGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:OrigRFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using the Regular method and a small median filter. The intensity variations reflect the cells more than the illumination, so this function is undesireable.']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
    Select the input image:OrigDAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:50
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Apply the illumination function to the original image and examine the result.']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
    Select the input image:OrigDAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigGFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:50
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigGFP
    Name the output image:CorrGFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:OrigRFP
    Name the output image:IllumRFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:50
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:OrigRFP
    Name the output image:CorrRFP
    Select the illumination function:IllumRFP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CorrDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:illumcorrect
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Test Illumination Pipelines/10Illumination Correction Images(Reg,Dilate100,Each,Median200)
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CorrGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:illumcorrect
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Test Illumination Pipelines/10Illumination Correction Images(Reg,Dilate100,Each,Median200)
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrRFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:illumcorrect
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Test Illumination Pipelines/10Illumination Correction Images(Reg,Dilate100,Each,Median200)
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
